load_file("nrngui.hoc")
load_file("Stick.hoc")

NCELL = 2
objref cell[NCELL]
for i=0, NCELL-1{
    cell[i] = new Stick()
}

objref rnd
rnd = new Random()
rnd.uniform(0,1000)

//cell[0].insertFukuda()
/*
cell[0].soma{
    insert MsLNdebug
    ena = 50
    ek  = -100
    el_MsLNdebug = -67
    insert IAHP2debug
    eahp_IAHP2debug = -140
    insert caddebug
    ctau_caddebug = 0.0000125
    insert ICA
    eca = 120
}
*/
/*
cell[0].soma{
    insert MsLN
    ena = 50
    ek  = -100
    el_MsLN = -67
    insert IAHP2
    eahp_IAHP2 = -140
    
    //insert caddebug
    //ctau_cad = 0.0000125
    //cainf_caddebug = 1.4
    //ctau_caddebug = 0.0000125
    insert cad
    cainf_cad =1.4
    ctau_cad = 0.0000125
    insert ICA
    eca = 120
}*/
cell[0].insertLNlla4()

cell[0].setVoltageRecord()
cell[0].setIntermitStim(200,15000,1500,0,-1,0)
cell[0].setCurrentRecord1()


cell[1].soma{
    insert MsLN
    ena = 50
    ek  = -100
    el_MsLN = -67
    insert IAHP2
    eahp_IAHP2 = -140
    insert caddebug
    cainf_caddebug = 1.4
    ctau_caddebug = 0.0125
    insert ICA
    eca = 120
}
cell[1].setVoltageRecord()
cell[1].setIntermitStim(200,15000,1500,0,-1,0)
cell[1].setCurrentRecord1()

/*
for i= 1, NCELL-1{
    cell[i].insertFukuda()
    cell[i].setVoltageRecord()
    cell[i].setIntermitStim_gaus(20,35000,300,0,-1,0.02*i)
    cell[i].setCurrentRecord1()
}
*/

for i=0, NCELL-1{
    cell[i].soma{
	psection()
    }
}

tstop = 1000
dt = 0.025
MODE = 1

if(MODE == 1){
    run()
    for i=0,NCELL-1{
	cell[i].printVoltageRecord(i)	
	cell[i].printCurrentRecord1(i)
    }
    
}else if(MODE == 2){
    tstop = 500
    while(t < tstop){
    	//print t, cell[i].soma.v(0.5), cell[j].soma.v(0.5)
	
	i = 0
	j = 2
	/*
	if(cell[i].soma.ina != cell[j].soma.ina){
	    //print cell[i].soma.ik, cell[j].soma.ik,cell[i].soma.il_MsLN, cell[j].soma.il_MsLN
	    //print cell[i].soma.iahp_MsLN, cell[j].soma.iahp_MsLN,cell[i].soma.icad_MsLN, cell[j].soma.icad_MsLN
	    //	    print cell[i].soma.q_MsLN, cell[j].soma.q_MsLN
	    
	    //print cell[i].soma.cai, cell[j].soma.cai

	    print "NA ",t, cell[i].soma.ina, cell[j].soma.ina, cell[i].soma.gna_MsLN, cell[j].soma.gna_MsLN
	    //print cell[i].soma.h_MsLN, cell[j].soma.h_MsLN, cell[i].soma.m_MsLN, cell[j].soma.m_MsLN
	    //print cell[i].soma.n_MsLN, cell[j].soma.n_MsLN,cell[i].soma.s_inf_MsLN, cell[j].soma.s_inf_MsLN
	    print cell[i].soma.ha_MsLN, cell[j].soma.ha_MsLN, cell[i].soma.hb_MsLN, cell[j].soma.hb_MsLN
	    print cell[i].soma.na_MsLN, cell[j].soma.na_MsLN, cell[i].soma.nb_MsLN, cell[j].soma.nb_MsLN
	    print cell[i].soma.ma_MsLN, cell[j].soma.ma_MsLN, cell[i].soma.mb_MsLN, cell[j].soma.mb_MsLN
	    
	}
	*/
	
	print t
	cell[i].soma{
	    //print eca, ena, ek, el_MsLN, eahp_MsLN
	    print ik
	    //print minf_MsLN, ninf_MsLN, hinf_MsLN, mtau_MsLN, ntau_MsLN, htau_MsLN
	    //print ma_MsLN, mb_MsLN, na_MsLN, nb_MsLN, ha_MsLN, hb_MsLN, vv_MsLN
	}/*
	cell[j].soma{
	    print eca, ena, ek, el_MsLN, eahp_MsLN
	    print ik, il_MsLN, iahp_MsLN, icad_MsLN, m_MsLN,n_MsLN,h_MsLN
	    //print minf_MsLN, ninf_MsLN, hinf_MsLN, mtau_MsLN, ntau_MsLN, htau_MsLN
	    //print ma_MsLN, mb_MsLN, na_MsLN, nb_MsLN, ha_MsLN, hb_MsLN, vv_MsLN
	}
	*/
	/*

	if(cell[0].soma.ik != cell[2].soma.ik){
	    print "K ", t, cell[0].soma.ik, cell[2].soma.ik
	}
	*/
	//print t, cell[1].st1.j, cell[1].st1.cnt,cell[1].st1.k,cell[1].st1.flg, cell[1].st1.interval * cell[1].st1.k
	fadvance()
    }

}
